CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140124151645
GitHash:0c7fb94
ModuleCount:19
HasImagePlaneDetails:False

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder|None
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):.tif
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    Extract metadata from where?:Both
    Regular expression that finds metadata in the file name:(?P<HoldOut>[0-9]{4,6}_[A-Z]_[0-9]_[0-9])_(?P<Key>\\\\S*).tiff
    Type the regular expression that finds metadata in the subfolder path:.*[\\\\\\\\/](?P<Class>.*)$
    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:In
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    Rescale intensities?:No

ApplyThreshold:[module_num:2|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
    Select the input image:In
    Name the output image:ThreshBlue_Otsu2W
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
ApplyThreshold:[module_num:3|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
    Select the input image:In
    Name the output image:ThreshBlue_Otsu3FW
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ApplyThreshold:[module_num:4|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
    Select the input image:In
    Name the output image:ThreshBlue_Otsu3BW
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
Transforms:[module_num:5|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
    Input image name::In
    Output image name::InFourier
    Transform choice::Fourier
    Scale::3
    Order::0

Transforms:[module_num:6|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
    Input image name::In
    Output image name::InWavelet
    Transform choice::Haar Wavelet transform
    Scale::1
    Order::0

Transforms:[module_num:7|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
    Input image name::In
    Output image name::InCheby
    Transform choice::Chebyshev transform
    Scale::3
    Order::0

Transforms:[module_num:8|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
    Input image name::In
    Output image name::InChebyStats
    Transform choice::Chebyshev transform
    Scale::3
    Order::20

Transforms:[module_num:9|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
    Input image name::InFourier
    Output image name::InFourierCheby
    Transform choice::Chebyshev transform
    Scale::1
    Order::0

Transforms:[module_num:10|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
    Input image name::InFourier
    Output image name::InFourierWavelet
    Transform choice::Haar Wavelet transform
    Scale::1
    Order::0

Transforms:[module_num:11|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
    Input image name::InFourier
    Output image name::FourierChebyStats
    Transform choice::Chebyshev transform
    Scale::3
    Order::20

EnhanceEdges:[module_num:12|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
    Select the input image:In
    Name the output image:EdgedImage
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    Select an edge-finding method:Prewitt
    Select edge direction to enhance:All
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
CalculateMoments:[module_num:13|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
    Hidden:6
    Hidden:0
    Select an image to measure:In
    Select an image to measure:InCheby
    Select an image to measure:InWavelet
    Select an image to measure:InFourier
    Select an image to measure:InFourierCheby
    Select an image to measure:InFourierWavelet
    Moments to compute:Mean,Standard Deviation,Skewness,Kurtosis

CalculateHistogram:[module_num:14|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
    Hidden:6
    Hidden:0
    Hidden:4
    Select an image to measure:In
    Select an image to measure:InCheby
    Select an image to measure:InFourier
    Select an image to measure:InWavelet
    Select an image to measure:InFourierCheby
    Select an image to measure:InFourierWavelet
    Number of bins:3
    Number of bins:5
    Number of bins:7
    Number of bins:9

CalculateHistogram:[module_num:15|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
    Hidden:2
    Hidden:0
    Hidden:1
    Select an image to measure:InChebyStats
    Select an image to measure:FourierChebyStats
    Number of bins:32

MeasureImageQuality:[module_num:16|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
    Calculate metrics for which images?:Select...
    Image count:10
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:EdgedImage
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:In
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:InCheby
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:InFourier
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:InWavelet
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:ThreshBlue_Otsu2W
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:ThreshBlue_Otsu3BW
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:ThreshBlue_Otsu3FW
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:InFourierCheby
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:InFourierWavelet
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
EnhancedMeasureTexture:[module_num:17|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
    Hidden:6
    Hidden:0
    Hidden:2
    Select an image to measure:In
    Select an image to measure:InFourier
    Select an image to measure:InWavelet
    Select an image to measure:InCheby
    Select an image to measure:InFourierCheby
    Select an image to measure:InFourierWavelet
    Texture scale to measure:3
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Texture scale to measure:4
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4
    Measure Tamura features?:Yes
    Features to compute:Coarseness,Contrast,Directionality

ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|None
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements to export:Image|ImageQuality_StdIntensity_ThreshBlue_Otsu3BW,Image|ImageQuality_StdIntensity_ThreshBlue_Otsu3FW,Image|ImageQuality_StdIntensity_ThreshBlue_Otsu2W,Image|ImageQuality_StdIntensity_EdgedImage,Image|ImageQuality_StdIntensity_InFourierCheby,Image|ImageQuality_StdIntensity_InCheby,Image|ImageQuality_StdIntensity_InFourierWavelet,Image|ImageQuality_StdIntensity_InFourier,Image|ImageQuality_StdIntensity_In,Image|ImageQuality_StdIntensity_InWavelet,Image|ImageQuality_TotalIntensity_ThreshBlue_Otsu3BW,Image|ImageQuality_TotalIntensity_ThreshBlue_Otsu3FW,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
    Representation of Nan/Inf:NaN
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:CHARM-like_training_data_blue.csv
    Use the object name for the file name?:No

ExportToSpreadsheet:[module_num:19|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|None
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements to export:Image|Metadata_HoldOut,Image|Metadata_Class,Image|Metadata_Key
    Representation of Nan/Inf:NaN
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:CHARM-like_training_labels_blue.csv
    Use the object name for the file name?:No
